CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c2")
    Name to assign these images:h3k4me1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c1")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3")
    Name to assign these images:gr
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "c4")
    Name to assign these images:cebp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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enabled:False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
    Select the input image:dapi
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):175,225
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertObjectsToImage:[module_num:6|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enabled:False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
    Select the input objects:nuclei
    Name the output image:segm_nuclei
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:7|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:segm_nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|Z:\\TAD\\200428_adipogenesis_timecourses_revisited\\190603_3t3l1_timecourse\\cp_output_images111kb
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:cebp
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:9|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enabled:False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
    Hidden:4
    Select an image to measure:cebp
    Select an image to measure:h3k4me1
    Select an image to measure:dapi
    Select an image to measure:gr
    Select objects to measure:nuclei

MeasureObjectSizeShape:[module_num:10|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enabled:False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
    Select objects to measure:nuclei
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\TAD_temp_analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_whole
    Overwrite existing files without warning?:No
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